PsychoPy2experiment version="3.0.0b12"
Settings
  Experiment info = {'session': '001', 'participant': ''}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1800, 1200]
  expName = corsi
  exportHTML = manually
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Routines
  Routine trial
    PolygonComponent blk1
      fillColor = $[1,1,1]
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      units = height
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    PolygonComponent blk2
      fillColor = $[1,1,1]
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      units = height
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    PolygonComponent blk3
      fillColor = $[1,1,1]
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      units = height
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    PolygonComponent blk4
      fillColor = $[1,1,1]
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      units = height
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    PolygonComponent blk5
      fillColor = $[1,1,1]
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      units = height
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    MouseComponent mouse
      clickable = blk1, blk2, blk3, blk4, blk5
      forceEndRoutineOnPress = never
      saveMouseState = on click
      saveParamsClickable = name
      startVal [condition] = doingResponse
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    CodeComponent updateBlocks
      Code Type = Py
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      Begin Routine:
        # initial state
        blkIndex = 0
        nextSwitch = blockDuration
        doingResponse = False
        currBlock = None

        # store blocks as a dictionary (to switch between name/object)
        blocks = {}
        blocks['blk1']=blk1
        blocks['blk2']=blk2
        blocks['blk3']=blk3
        blocks['blk4']=blk4
        blocks['blk5']=blk5

        # give blocks a new set of random locations
        for label, block in blocks.items():
            block.pos = random(2)*0.8-0.4
            block.color = 'white'
      Each Frame:
        if not doingResponse and t > nextSwitch:
            if currBlock is not None:
                #reset color of current block
                currBlock.color = 'white'

            # then change current block and make that red
            if blkIndex >= len(blocks):
                doingResponse = True  # no more blocks to show
            else:
                currBlockName = sequence[blkIndex]
                currBlock = blocks[currBlockName]
                currBlock.color = 'red'

                # track time of this change
                nextSwitch += blockDuration
            blkIndex += 1

        # all clicked?
        if len(mouse.clicked_name) >= len(sequence):
            continueRoutine = False

        # update color of clicked
        for blockName in mouse.clicked_name:
            blocks[blockName].color = 'darkgrey'
  Routine ISI
    TextComponent blank
      letterHeight = 0.2
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .5
      text = +
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  Routine thanks
    TextComponent thanksText
      letterHeight = 0.07
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      units = height
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      text:
        Great! Thanks for your help!

        All done!
  Routine instructions
    TextComponent instrText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      units = height
      wrapWidth = 1.5
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      text:
        On each trial, watch the sequence of squares flashing red. When the sequence finishes try to click the same sequence.

        When you've made the same number of clicks as the original sequence the next trial will start.

        To make it easier squares will change color after you click them

        Press any key to get started
    KeyboardComponent endInstructions
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine instructions
  LoopInitiator trials loopType="TrialHandler"
    conditions = [OrderedDict([('sequence', ['blk1', 'blk2', 'blk3', 'blk4', 'blk5'])])]
    conditionsFile = conditions.xlsx
    loopType = random
    nReps = 5
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    Routine ISI
    Routine trial
  LoopTerminator trials
  Routine thanks
